PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'gender': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  expName = ET eng
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine Intro1
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    TextComponent intro_1
      color = black
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text =  Temporal-Spatial Task
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  Routine Intro2
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    TextComponent intro_2
      color = black
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hello!
        Thank you for participating in the experiment.
        This experiment is to find out temporal representation of time.
        If you want to continue, press the spacebar.
    KeyboardComponent intro2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro3
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    TextComponent Intro_3
      color = black
      contrast = 0.05
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In a moment, you will be presented with a series of  time words. After the question, the two time words will be presented on the screen.
        Please press the corresponding key (eg, ‘up’, ‘down’, ‘left’, ‘right’) according to the location of the correct answer.
        If you understand the rules, press the spacebar.
    KeyboardComponent intro3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Intro4
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    TextComponent Intro_4
      color = black
      contrast = 0.05
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Please respond as quickly and error-free as possible.
        If you are ready to experiment, press the space bar.
    KeyboardComponent intro4_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac_intro
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    TextComponent pracintro
      color = black
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_intro
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    KeyboardComponent pracintro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if RESP.corr == 1:
            msg = "Correct"
            msgColor = 'MediumBlue'
            prac_count +=1


        else:
            msg = "Incorrect"
            msgColor = 'DarkRed'
    TextComponent pracfeedback
      color [set every repeat] = $msgColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine Prac_check
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        if prac_count >= trials.nTotal*0.9: #연습 끝나는 규칙
            prac_block.finished = True
        else:
                prac_block.finished = False
                msg_intro = "\n\n Let's do it again! \nTo continue, please press space bar. "
  Routine intro5
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    TextComponent intro_5
      color = black
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, let's start the experiment.
        When you're ready, press the spacebar to start the experiment.
    KeyboardComponent intro5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practrial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        prac_count = 0
        msg_intro = " \n\nBefore participating in the experiment, we will pratice first.  \n\n In order to start the experiment, you must get at least 90% correct in the practice round. \n\n If you understand the explanation, please press the space bar. "
    ImageComponent image
      image [set every repeat] = $Instruction_stim
      size = (1.7, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine solution
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    TextComponent early
      color = black
      letterHeight = 0.05
      pos [set every repeat] = early_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $earlier_stim
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    KeyboardComponent RESP
      allowedKeys = 'left','right','up','down'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent late
      color = black
      letterHeight = 0.05
      pos [set every repeat] = late_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $later_stim
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  Routine The_end
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    TextComponent theend
      color = black
      font = NanumGothic
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        非常感谢您的参与。

        Thanks for participating the experiment.
  Routine block
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    ImageComponent main_image
      image [set every repeat] = $Instruction_stim
      size = (2, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent main_early1
      color = black
      letterHeight = 0.05
      pos [set every repeat] = early_position
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $earlier_stim
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    KeyboardComponent key_resp1
      allowedKeys = 'up','down','left','right'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent main_late1
      color = black
      letterHeight = 0.05
      pos [set every repeat] = late_position
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $later_stim
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    TextComponent fix
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      text = +
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  Routine break_2
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    TextComponent question
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      text [set every repeat] = $Qustion
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    ImageComponent fengjing
      image [set every repeat] = $Path
      size = [2,1.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 6
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent Yes
      color = black
      letterHeight = 0.05
      pos = (-0.3,-0.3)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 5
      text = Yes
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    TextComponent no
      color = black
      letterHeight = 0.05
      pos = (0.3,-0.3)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 5
      text = No
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Flow
  Routine Intro1
  Routine Intro2
  Routine Intro3
  Routine Intro4
  LoopInitiator prac_block loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine Prac_intro
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Practice_Eng.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'No': 1.0, 'Catagory': 'Month', 'earlier_stim': 'August', 'later_stim': 'September ', 'conguency': 'conguent', 'orientation': 'Hori', 'instruction': 'early', 'corr_resp': 'left', 'Instruction_stim': 'image/Eng_early.png', 'early_position': '[-0.3,0)', 'late_position': '[0.3,0)'},
        {'No': 2.0, 'Catagory': 'Month', 'earlier_stim': 'April', 'later_stim': 'May', 'conguency': 'conguent', 'orientation': 'Hori', 'instruction': 'late', 'corr_resp': 'right', 'Instruction_stim': 'image/Eng_late.png', 'early_position': '[-0.3,0)', 'late_position': '[0.3,0)'},
        {'No': 3.0, 'Catagory': 'Month', 'earlier_stim': 'November ', 'later_stim': 'December', 'conguency': 'conguent', 'orientation': 'Vert', 'instruction': 'early', 'corr_resp': 'up', 'Instruction_stim': 'image/Eng_early.png', 'early_position': '[0,0.3)', 'late_position': '[0,-0.3)'},
        {'No': 4.0, 'Catagory': 'Month', 'earlier_stim': 'May', 'later_stim': 'June', 'conguency': 'conguent', 'orientation': 'Vert', 'instruction': 'late', 'corr_resp': 'down', 'Instruction_stim': 'image/Eng_late.png', 'early_position': '[0,0.3)', 'late_position': '[0,-0.3)'},
        {'No': 5.0, 'Catagory': 'Month', 'earlier_stim': 'March', 'later_stim': 'Feburary', 'conguency': 'incongruent', 'orientation': 'Hori', 'instruction': 'early', 'corr_resp': 'right', 'Instruction_stim': 'image/Eng_early.png', 'early_position': '[-0.3,0)', 'late_position': '[0.3,0)'}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
      Routine practrial
      Routine solution
      Routine feedback
    LoopTerminator trials
    Routine Prac_check
  LoopTerminator prac_block
  Routine intro5
  LoopInitiator block1 loopType="TrialHandler"
    conditionsFile = blocks/Block 1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('No', 29), ('Category', 'Month'), ('earlier_stim', 'May'), ('later_stim', 'September '), ('distance', 4), ('congruency', 'congruent'), ('orientation', 'Vert'), ('instruction', 'late'), ('corr_resp', 'down'), ('Instruction_stim', 'image/Eng_late.png'), ('early_position', [0, 0.3]), ('late_position', [0, -0.3])]),
      OrderedDict([('No', 1), ('Category', 'Month'), ('earlier_stim', 'January'), ('later_stim', 'February '), ('distance', 1), ('congruency', 'congruent'), ('orientation', 'Hori'), ('instruction', 'early'), ('corr_resp', 'left'), ('Instruction_stim', 'image/Eng_early.png'), ('early_position', [-0.3, 0]), ('late_position', [0.3, 0])]),
      OrderedDict([('No', 23), ('Category', 'Month'), ('earlier_stim', 'January'), ('later_stim', 'February '), ('distance', 1), ('congruency', 'congruent'), ('orientation', 'Vert'), ('instruction', 'early'), ('corr_resp', 'up'), ('Instruction_stim', 'image/Eng_early.png'), ('early_position', [0, 0.3]), ('late_position', [0, -0.3])]),
      OrderedDict([('No', 12), ('Category', 'Month'), ('earlier_stim', 'February'), ('later_stim', 'April'), ('distance', 2), ('congruency', 'congruent'), ('orientation', 'Hori'), ('instruction', 'late'), ('corr_resp', 'right'), ('Instruction_stim', 'image/Eng_late.png'), ('early_position', [-0.3, 0]), ('late_position', [0.3, 0])])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
    Routine block
  LoopTerminator block1
  LoopInitiator break1 loopType="TrialHandler"
    Selected rows = 0:8
    conditionsFile = Break_material/Break_eng.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Image': 'Spring 1.jpg', 'Qustion': 'Is this Spring?', 'Response': 'Yes', 'CorrAns': 'Left', 'Path': 'Break_material/Image/Spring 1.jpg'},
      {'Image': 'Spring 2.jpg', 'Qustion': 'Is this Winter?', 'Response': 'No', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Spring 2.jpg'},
      {'Image': 'Spring 3.jpg', 'Qustion': 'Is this Summer?', 'Response': 'No', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Spring 3.jpg'},
      {'Image': 'Spring 4.jpg', 'Qustion': 'Is this Autumn?', 'Response': 'No', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Spring 4.jpg'},
      {'Image': 'Spring 5.jpg', 'Qustion': 'Is this Winter?', 'Response': 'No', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Spring 5.jpg'},
      {'Image': 'Spring 6.jpg', 'Qustion': 'Is this Spring?', 'Response': 'Yes', 'CorrAns': 'Left', 'Path': 'Break_material/Image/Spring 6.jpg'},
      {'Image': 'Summer 1.jpg', 'Qustion': 'Is this Autumn?', 'Response': 'No', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Summer 1.jpg'},
      {'Image': 'Summer 2.jpg', 'Qustion': 'Is this Summer?', 'Response': 'Yes', 'CorrAns': 'Left', 'Path': 'Break_material/Image/Summer 2.jpg'},
      {'Image': 'Summer 3.jpg', 'Qustion': 'Is this Autumn?', 'Response': 'No', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Summer 3.jpg'},
      {'Image': 'Summer 4.jpg', 'Qustion': 'Is this Spring?', 'Response': 'No', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Summer 4.jpg'}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
    Routine break_2
  LoopTerminator break1
  LoopInitiator block2 loopType="TrialHandler"
    conditionsFile = blocks/Block 2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('No', 46), ('Category', 'Month'), ('earlier_stim', 'August'), ('later_stim', 'June'), ('distance', 2), ('congruency', 'incongruent'), ('orientation', 'Hori'), ('instruction', 'early'), ('corr_resp', 'right'), ('Instruction_stim', 'image/Eng_early.png'), ('early_position', [-0.3, 0]), ('late_position', [0.3, 0])]),
      OrderedDict([('No', 56), ('Category', 'Month'), ('earlier_stim', 'December'), ('later_stim', 'August'), ('distance', 4), ('congruency', 'incongruent'), ('orientation', 'Vert'), ('instruction', 'early'), ('corr_resp', 'down'), ('Instruction_stim', 'image/Eng_early.png'), ('early_position', [0, 0.3]), ('late_position', [0, -0.3])]),
      OrderedDict([('No', 43), ('Category', 'Month'), ('earlier_stim', 'May'), ('later_stim', 'March'), ('distance', 2), ('congruency', 'incongruent'), ('orientation', 'Hori'), ('instruction', 'early'), ('corr_resp', 'right'), ('Instruction_stim', 'image/Eng_early.png'), ('early_position', [-0.3, 0]), ('late_position', [0.3, 0])]),
      OrderedDict([('No', 28), ('Category', 'Month'), ('earlier_stim', 'April'), ('later_stim', 'August'), ('distance', 4), ('congruency', 'congruent'), ('orientation', 'Vert'), ('instruction', 'late'), ('corr_resp', 'down'), ('Instruction_stim', 'image/Eng_late.png'), ('early_position', [0, 0.3]), ('late_position', [0, -0.3])])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
    Routine block
  LoopTerminator block2
  LoopInitiator break2 loopType="TrialHandler"
    Selected rows = 0:8
    conditionsFile = Break_material/Break_eng.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Image': 'Spring 1.jpg', 'Qustion': 'Is this Spring?', 'Response': 'Yes', 'CorrAns': 'Left', 'Path': 'Break_material/Image/Spring 1.jpg'},
      {'Image': 'Spring 2.jpg', 'Qustion': 'Is this Winter?', 'Response': 'No', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Spring 2.jpg'},
      {'Image': 'Spring 3.jpg', 'Qustion': 'Is this Summer?', 'Response': 'No', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Spring 3.jpg'},
      {'Image': 'Spring 4.jpg', 'Qustion': 'Is this Autumn?', 'Response': 'No', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Spring 4.jpg'},
      {'Image': 'Spring 5.jpg', 'Qustion': 'Is this Winter?', 'Response': 'No', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Spring 5.jpg'},
      {'Image': 'Spring 6.jpg', 'Qustion': 'Is this Spring?', 'Response': 'Yes', 'CorrAns': 'Left', 'Path': 'Break_material/Image/Spring 6.jpg'},
      {'Image': 'Summer 1.jpg', 'Qustion': 'Is this Autumn?', 'Response': 'No', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Summer 1.jpg'},
      {'Image': 'Summer 2.jpg', 'Qustion': 'Is this Summer?', 'Response': 'Yes', 'CorrAns': 'Left', 'Path': 'Break_material/Image/Summer 2.jpg'},
      {'Image': 'Summer 3.jpg', 'Qustion': 'Is this Autumn?', 'Response': 'No', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Summer 3.jpg'},
      {'Image': 'Summer 4.jpg', 'Qustion': 'Is this Spring?', 'Response': 'No', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Summer 4.jpg'}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
    Routine break_2
  LoopTerminator break2
  LoopInitiator block3 loopType="TrialHandler"
    conditionsFile = blocks/Block 3.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('No', 54), ('Category', 'Month'), ('earlier_stim', 'June'), ('later_stim', 'April'), ('distance', 2), ('congruency', 'incongruent'), ('orientation', 'Hori'), ('instruction', 'late'), ('corr_resp', 'left'), ('Instruction_stim', 'image/Eng_late.png'), ('early_position', [-0.3, 0]), ('late_position', [0.3, 0])]),
      OrderedDict([('No', 69), ('Category', 'Month'), ('earlier_stim', 'November '), ('later_stim', 'September '), ('distance', 2), ('congruency', 'incongruent'), ('orientation', 'Vert'), ('instruction', 'early'), ('corr_resp', 'down'), ('Instruction_stim', 'image/Eng_early.png'), ('early_position', [0, 0.3]), ('late_position', [0, -0.3])]),
      OrderedDict([('No', 22), ('Category', 'Month'), ('earlier_stim', 'February'), ('later_stim', 'April'), ('distance', 2), ('congruency', 'congruent'), ('orientation', 'Vert'), ('instruction', 'early'), ('corr_resp', 'up'), ('Instruction_stim', 'image/Eng_early.png'), ('early_position', [0, 0.3]), ('late_position', [0, -0.3])]),
      OrderedDict([('No', 15), ('Category', 'Month'), ('earlier_stim', 'July'), ('later_stim', 'November '), ('distance', 4), ('congruency', 'congruent'), ('orientation', 'Hori'), ('instruction', 'late'), ('corr_resp', 'right'), ('Instruction_stim', 'image/Eng_late.png'), ('early_position', [-0.3, 0]), ('late_position', [0.3, 0])])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
    Routine block
  LoopTerminator block3
  LoopInitiator break3 loopType="TrialHandler"
    Selected rows = 0:8
    conditionsFile = Break_material/Break_eng.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine break_2
  LoopTerminator break3
  LoopInitiator block4 loopType="TrialHandler"
    conditionsFile = blocks/Block 4.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('No', 79), ('Category', 'Month'), ('earlier_stim', 'November '), ('later_stim', 'September '), ('distance', 2), ('congruency', 'incongruent'), ('orientation', 'Vert'), ('instruction', 'late'), ('corr_resp', 'up'), ('Instruction_stim', 'image/Eng_late.png'), ('early_position', [0, 0.3]), ('late_position', [0, -0.3])]),
      OrderedDict([('No', 106), ('Category', 'Week'), ('earlier_stim', 'Wednesday\xa0'), ('later_stim', 'Thursday'), ('distance', 1), ('congruency', 'congruent'), ('orientation', 'Hori'), ('instruction', 'late'), ('corr_resp', 'right'), ('Instruction_stim', 'image/Eng_late.png'), ('early_position', [-0.3, 0]), ('late_position', [0.3, 0])]),
      OrderedDict([('No', 143), ('Category', 'Week'), ('earlier_stim', 'Saturday'), ('later_stim', 'Friday'), ('distance', 1), ('congruency', 'incongruent'), ('orientation', 'Vert'), ('instruction', 'early'), ('corr_resp', 'down'), ('Instruction_stim', 'image/Eng_early.png'), ('early_position', [0, 0.3]), ('late_position', [0, -0.3])]),
      OrderedDict([('No', 30), ('Category', 'Month'), ('earlier_stim', 'March'), ('later_stim', 'June'), ('distance', 3), ('congruency', 'congruent'), ('orientation', 'Vert'), ('instruction', 'late'), ('corr_resp', 'down'), ('Instruction_stim', 'image/Eng_late.png'), ('early_position', [0, 0.3]), ('late_position', [0, -0.3])])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
    Routine block
  LoopTerminator block4
  Routine The_end
