PsychoPy2experiment version="2023.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 960]
  expName = ETproject_Chi_2023.1.1
  eyetracker = GazePoint
  gpAddress = 10.56.71.47
  gpPort = 4242
  keyboardBackend = ioHub
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Routines
  Routine Intro1
    TextComponent intro_1
      color = black
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Tasks
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  Routine intro2
    TextComponent intro_2
      color = black
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        感谢您参与实验。
        本实验旨在探究时间用语与空间概念之间的联系。
        当您准备好开始时，请按空格键。
    KeyboardComponent intro2_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro3
    TextComponent Intro_3
      color = black
      contrast = 0.05
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        接下来您将会看到一些时间词语
        您需要根据提示选出更早或更晚的时间。
        请根据正确答案在屏幕上的位置的位置，
        按下对应的按键
        （如：“上”，“下”，“左”，“右”）
        如果您已了解规则，请按空格键。
    KeyboardComponent intro3_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac_intro
    TextComponent pracintro
      color = black
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg_intro
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    KeyboardComponent pracintro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        prac_count = 0
        msg_intro = "在参与实验之前，我们先进行练习。 \n\n 为了通过练习，您必须在练习中答对 80%。 \n\n 如果您已理解，请按空格键以开始。 \n\nBefore participating in the experiment, we will pratice first.  \n\n In order to start the experiment, you must get at least 80% correct in the practice round. \n\n If you understand the explanation, please press the space bar. "

        net_pos_x = 0
        net_pos_y = 0
        clicked_net = []
    ImageComponent image
      image [set every repeat] = $Instruction_stim
      size = (1.5, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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  Routine solution
    TextComponent early
      color = black
      letterHeight = 0.05
      pos [set every repeat] = early_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $earlier_stim
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    KeyboardComponent RESP
      allowedKeys = 'left','right','up','down'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = nothing
      storeCorrect = True
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    TextComponent late
      color = black
      letterHeight = 0.05
      pos [set every repeat] = late_position
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $later_stim
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  Routine feedback
    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        msg = ''
        loop_o = 0
        number_correct = 0
      Begin Routine:
        loop_o += 1


        if RESP.corr == 1:
            number_correct = number_correct + 1
            msg ='Correct! \nScore = %.1f%%' %(number_correct*100/loop_o)
            msgColor = 'green'

        else:
            msg ='Oops! That was wrong \nScore = %.1f%%' %(number_correct*100/loop_o)
            msgColor = 'red'
    TextComponent pracfeedback
      color [set every repeat] = $msgColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine intro5
    TextComponent intro_5
      color = black
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在，让我们开始实验。
        准备就绪后，按空格键以开始实验。
    KeyboardComponent intro5_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac_check
    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        if number_correct*100/loop_o >= 0.8:
            prac_block.finished = True
        else:
                prac_block.finished = False
                msg_intro = "我们再练习一次！\n\n Let's do it again! \nTo continue, please press space bar. "
  Routine baseline
    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        恭喜您通过练习!

        现在我们将进行校准
        请您注视屏幕上即将出现的+
    TextComponent text_5
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 4
      text = +
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    EyetrackerRecordComponent baselinerecord
      actionType = Start and Stop
      startVal [time (s)] = 3
      stopVal [duration (s)] = 4
      syncScreenRefresh = False
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  Routine BLOCK
    ImageComponent main_image_2
      image [set every repeat] = $Instruction_stim
      size = (1.5, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent main_early
      color = black
      letterHeight = 0.05
      pos [set every repeat] = early_position
      startVal [time (s)] = 2
      stopVal [duration (s)] = 5
      text [set every repeat] = $earlier_stim
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    KeyboardComponent ct_resp
      allowedKeys = 'left','right','up','down'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent main_late
      color = black
      letterHeight = 0.05
      pos [set every repeat] = late_position
      startVal [time (s)] = 2
      stopVal [duration (s)] = 5
      text [set every repeat] = $later_stim
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    TextComponent fix
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 1.1
      stopVal [duration (s)] = 0.8
      text = +
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    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      syncScreenRefresh = False
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  Routine BREAK
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      text [set every repeat] = $Qustion
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    ImageComponent fengjing
      image [set every repeat] = $Path
      size = [2,1.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 6
      stopVal [duration (s)] = 5
      storeCorrect = True
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    TextComponent text_2
      color = black
      letterHeight = 0.05
      pos = (-0.3,-0.3)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 5
      text = 是
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (0.3,-0.3)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 5
      text = 否
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  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = True
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    textColor = auto
    units = from exp settings
  Routine end
    TextComponent theend
      color = black
      font = NanumGothic
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        非常感谢您的参与。
        您现在可以通知研究人员

        研究人员将在隔壁房间
  Routine Break_intro
    TextComponent intro
      color = black
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        感谢您完成第1模块(1/4)。

        接下来请您欣赏一组图片
        请使用← or →(对应是或否)回复提示问题

        当您准备好开始时，请按空格键。
    KeyboardComponent intro2_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BreakIntro2
    TextComponent intro_3
      color = black
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        感谢您完成第2模块(2/4)。

        接下来请您欣赏一组图片
        请使用← or →(对应是或否)回复提示问题

        当您准备好开始时，请按空格键。
    KeyboardComponent intro2_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine breakintro3
    TextComponent intro_4
      color = black
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        感谢您完成第3模块(3/4)。

        接下来请您欣赏一组图片
        请使用← or →(对应是或否)回复提示问题

        当您准备好开始时，请按空格键。
    KeyboardComponent intro2_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block2_2
    TextComponent intro_6
      color = black
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在，让我们开始第2模块。
        准备就绪后，按空格键以开始实验。
    KeyboardComponent intro5_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_3_3
    TextComponent intro_7
      color = black
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在，让我们开始第3模块。
        准备就绪后，按空格键以开始实验。
    KeyboardComponent intro2_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_4_4
    TextComponent intro_8
      color = black
      font = NanumGothic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        现在，让我们开始第4模块。
        准备就绪后，按空格键以开始实验。
    KeyboardComponent intro2_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  EyetrackerValidationRoutine validation
  Routine Intro1
  Routine intro2
  Routine intro3
  LoopInitiator prac_block loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine Prac_intro
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = Practice_Chi.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'No': 1, 'Category': 'practice', 'earlier_stim': '星期三 ', 'later_stim': '星期四', 'conguency': 'congruent', 'orientation': 'Hori', 'instruction': 'early', 'corr_resp': 'left', 'Instruction_stim': 'image/Chi_early.png', 'early_position': [-0.4, 0], 'late_position': [0.4, 0]},
        {'No': 2, 'Category': 'practice', 'earlier_stim': '星期五', 'later_stim': '星期六', 'conguency': 'congruent', 'orientation': 'Hori', 'instruction': 'late', 'corr_resp': 'right', 'Instruction_stim': 'image/Chi_late.png', 'early_position': [-0.4, 0], 'late_position': [0.4, 0]},
        {'No': 3, 'Category': 'practice', 'earlier_stim': '星期一', 'later_stim': '星期二', 'conguency': 'congruent', 'orientation': 'Vert', 'instruction': 'early', 'corr_resp': 'up', 'Instruction_stim': 'image/Chi_early.png', 'early_position': [0, 0.4], 'late_position': [0, -0.4]},
        {'No': 4, 'Category': 'practice', 'earlier_stim': '星期日', 'later_stim': '星期一', 'conguency': 'congruent', 'orientation': 'Vert', 'instruction': 'late', 'corr_resp': 'down', 'Instruction_stim': 'image/Chi_late.png', 'early_position': [0, 0.4], 'late_position': [0, -0.4]},
        {'No': 5, 'Category': 'practice', 'earlier_stim': '星期二', 'later_stim': '星期一', 'conguency': 'incongruent', 'orientation': 'Hori', 'instruction': 'early', 'corr_resp': 'right', 'Instruction_stim': 'image/Chi_early.png', 'early_position': [-0.4, 0], 'late_position': [0.4, 0]}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
      Routine Practice
      Routine solution
      Routine feedback
    LoopTerminator trials
    Routine Prac_check
  LoopTerminator prac_block
  Routine baseline
  Routine intro5
  LoopInitiator block1 loopType="TrialHandler"
    conditionsFile = blocks/Block 1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('No', 142), ('Category', 'Week'), ('earlier_stim', '星期五'), ('later_stim', '星期四'), ('distance', 1), ('congruency', 'incongruent'), ('orientation', 'Vert'), ('instruction', 'early'), ('corr_resp', 'down'), ('Instruction_stim', 'image/Chi_early.png'), ('early_position', [0, 0.4]), ('late_position', [0, -0.4])]),
      OrderedDict([('No', 75), ('Category', 'Month'), ('earlier_stim', '十月 '), ('later_stim', '九月 '), ('distance', 1), ('congruency', 'incongruent'), ('orientation', 'Vert'), ('instruction', 'early'), ('corr_resp', 'down'), ('Instruction_stim', 'image/Chi_early.png'), ('early_position', [0, 0.4]), ('late_position', [0, -0.4])]),
      OrderedDict([('No', 29), ('Category', 'Month'), ('earlier_stim', '七月'), ('later_stim', '八月'), ('distance', 1), ('congruency', 'congruent'), ('orientation', 'Vert'), ('instruction', 'early'), ('corr_resp', 'up'), ('Instruction_stim', 'image/Chi_early.png'), ('early_position', [0, 0.4]), ('late_position', [0, -0.4])]),
      OrderedDict([('No', 106), ('Category', 'Week'), ('earlier_stim', '星期三\xa0'), ('later_stim', '星期六'), ('distance', 3), ('congruency', 'congruent'), ('orientation', 'Hori'), ('instruction', 'late'), ('corr_resp', 'right'), ('Instruction_stim', 'image/Chi_late.png'), ('early_position', [-0.4, 0]), ('late_position', [0.4, 0])])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
    Routine BLOCK
  LoopTerminator block1
  Routine Break_intro
  LoopInitiator break1 loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = Break_material/Break_chi.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Image': 'Spring 1.jpg', 'Qustion': '这是春天吗？', 'Response': '是', 'CorrAns': 'Left', 'Path': 'Break_material/Image/Spring 1.jpg'},
      {'Image': 'Spring 2.jpg', 'Qustion': '这是冬天吗？', 'Response': '否', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Spring 2.jpg'},
      {'Image': 'Spring 3.jpg', 'Qustion': '这是夏天吗？', 'Response': '否', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Spring 3.jpg'},
      {'Image': 'Spring 4.jpg', 'Qustion': '这是秋天吗？', 'Response': '否', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Spring 4.jpg'},
      {'Image': 'Spring 5.jpg', 'Qustion': '这是冬天吗？', 'Response': '否', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Spring 5.jpg'},
      {'Image': 'Spring 6.jpg', 'Qustion': '这是春天吗？', 'Response': '是', 'CorrAns': 'Left', 'Path': 'Break_material/Image/Spring 6.jpg'},
      {'Image': 'Summer 1.jpg', 'Qustion': '这是秋天吗？', 'Response': '否', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Summer 1.jpg'},
      {'Image': 'Summer 2.jpg', 'Qustion': '这是夏天吗？', 'Response': '是', 'CorrAns': 'Left', 'Path': 'Break_material/Image/Summer 2.jpg'},
      {'Image': 'Summer 3.jpg', 'Qustion': '这是秋天吗？', 'Response': '否', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Summer 3.jpg'},
      {'Image': 'Summer 4.jpg', 'Qustion': '这是春天吗？', 'Response': '否', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Summer 4.jpg'},
      {'Image': 'Summer 5.jpg', 'Qustion': '这是夏天吗？', 'Response': '是', 'CorrAns': 'Left', 'Path': 'Break_material/Image/Summer 5.jpg'}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
    Routine BREAK
  LoopTerminator break1
  Routine block2_2
  LoopInitiator block2 loopType="TrialHandler"
    conditionsFile = blocks/Block 2.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('No', 46), ('Category', 'Month'), ('earlier_stim', '八月'), ('later_stim', '六月'), ('distance', 2), ('congruency', 'incongruent'), ('orientation', 'Hori'), ('instruction', 'early'), ('corr_resp', 'right'), ('Instruction_stim', 'image/Chi_early.png'), ('early_position', [-0.3, 0]), ('late_position', [0.3, 0])]),
      OrderedDict([('No', 56), ('Category', 'Month'), ('earlier_stim', '十二月'), ('later_stim', '八月'), ('distance', 4), ('congruency', 'incongruent'), ('orientation', 'Vert'), ('instruction', 'early'), ('corr_resp', 'down'), ('Instruction_stim', 'image/Chi_early.png'), ('early_position', [0, 0.3]), ('late_position', [0, -0.3])]),
      OrderedDict([('No', 43), ('Category', 'Month'), ('earlier_stim', '五月'), ('later_stim', '三月'), ('distance', 2), ('congruency', 'incongruent'), ('orientation', 'Hori'), ('instruction', 'early'), ('corr_resp', 'right'), ('Instruction_stim', 'image/Chi_early.png'), ('early_position', [-0.3, 0]), ('late_position', [0.3, 0])]),
      OrderedDict([('No', 28), ('Category', 'Month'), ('earlier_stim', '四月'), ('later_stim', '八月'), ('distance', 4), ('congruency', 'congruent'), ('orientation', 'Vert'), ('instruction', 'late'), ('corr_resp', 'down'), ('Instruction_stim', 'image/Chi_late.png'), ('early_position', [0, 0.3]), ('late_position', [0, -0.3])])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
    Routine BLOCK
  LoopTerminator block2
  Routine BreakIntro2
  LoopInitiator break2 loopType="TrialHandler"
    Selected rows = 0:6
    conditionsFile = Break_material/Break_chi.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Image': 'Spring 1.jpg', 'Qustion': '这是春天吗？', 'Response': '是', 'CorrAns': 'Left', 'Path': 'Break_material/Image/Spring 1.jpg'},
      {'Image': 'Spring 2.jpg', 'Qustion': '这是冬天吗？', 'Response': '否', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Spring 2.jpg'},
      {'Image': 'Spring 3.jpg', 'Qustion': '这是夏天吗？', 'Response': '否', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Spring 3.jpg'},
      {'Image': 'Spring 4.jpg', 'Qustion': '这是秋天吗？', 'Response': '否', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Spring 4.jpg'},
      {'Image': 'Spring 5.jpg', 'Qustion': '这是冬天吗？', 'Response': '否', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Spring 5.jpg'},
      {'Image': 'Spring 6.jpg', 'Qustion': '这是春天吗？', 'Response': '是', 'CorrAns': 'Left', 'Path': 'Break_material/Image/Spring 6.jpg'},
      {'Image': 'Summer 1.jpg', 'Qustion': '这是秋天吗？', 'Response': '否', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Summer 1.jpg'},
      {'Image': 'Summer 2.jpg', 'Qustion': '这是夏天吗？', 'Response': '是', 'CorrAns': 'Left', 'Path': 'Break_material/Image/Summer 2.jpg'},
      {'Image': 'Summer 3.jpg', 'Qustion': '这是秋天吗？', 'Response': '否', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Summer 3.jpg'},
      {'Image': 'Summer 4.jpg', 'Qustion': '这是春天吗？', 'Response': '否', 'CorrAns': 'Right', 'Path': 'Break_material/Image/Summer 4.jpg'},
      {'Image': 'Summer 5.jpg', 'Qustion': '这是夏天吗？', 'Response': '是', 'CorrAns': 'Left', 'Path': 'Break_material/Image/Summer 5.jpg'}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
    Routine BREAK
  LoopTerminator break2
  Routine block_3_3
  LoopInitiator block3 loopType="TrialHandler"
    conditionsFile = blocks/Block 3.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('No', 79), ('Category', 'Month'), ('earlier_stim', '十一月 '), ('later_stim', '九月 '), ('distance', 2), ('congruency', 'incongruent'), ('orientation', 'Vert'), ('instruction', 'late'), ('corr_resp', 'up'), ('Instruction_stim', 'image/Chi_late.png'), ('early_position', [0, 0.4]), ('late_position', [0, -0.4])]),
      OrderedDict([('No', 76), ('Category', 'Month'), ('earlier_stim', '十一月 '), ('later_stim', '十月 '), ('distance', 1), ('congruency', 'incongruent'), ('orientation', 'Vert'), ('instruction', 'early'), ('corr_resp', 'down'), ('Instruction_stim', 'image/Chi_early.png'), ('early_position', [0, 0.4]), ('late_position', [0, -0.4])]),
      OrderedDict([('No', 33), ('Category', 'Month'), ('earlier_stim', '十一月 '), ('later_stim', '十二月'), ('distance', 1), ('congruency', 'congruent'), ('orientation', 'Vert'), ('instruction', 'early'), ('corr_resp', 'up'), ('Instruction_stim', 'image/Chi_early.png'), ('early_position', [0, 0.4]), ('late_position', [0, -0.4])]),
      OrderedDict([('No', 63), ('Category', 'Month'), ('earlier_stim', '十一月 '), ('later_stim', '七月'), ('distance', 4), ('congruency', 'incongruent'), ('orientation', 'Vert'), ('instruction', 'late'), ('corr_resp', 'up'), ('Instruction_stim', 'image/Chi_late.png'), ('early_position', [0, 0.4]), ('late_position', [0, -0.4])])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
    Routine BLOCK
  LoopTerminator block3
  Routine breakintro3
  LoopInitiator break3 loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = Break_material/Break_chi.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine BREAK
  LoopTerminator break3
  Routine block_4_4
  LoopInitiator block4 loopType="TrialHandler"
    conditionsFile = blocks/Block 4.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('No', 3), ('Category', 'Month'), ('earlier_stim', '三月'), ('later_stim', '六月'), ('distance', 3), ('congruency', 'congruent'), ('orientation', 'Hori'), ('instruction', 'early'), ('corr_resp', 'left'), ('Instruction_stim', 'image/Chi_early.png'), ('early_position', [-0.4, 0]), ('late_position', [0.4, 0])]),
      OrderedDict([('No', 114), ('Category', 'Week'), ('earlier_stim', '星期四'), ('later_stim', '星期六'), ('distance', 2), ('congruency', 'congruent'), ('orientation', 'Vert'), ('instruction', 'early'), ('corr_resp', 'up'), ('Instruction_stim', 'image/Chi_early.png'), ('early_position', [0, 0.4]), ('late_position', [0, -0.4])]),
      OrderedDict([('No', 132), ('Category', 'Week'), ('earlier_stim', '星期三\xa0'), ('later_stim', '星期一'), ('distance', 2), ('congruency', 'incongruent'), ('orientation', 'Hori'), ('instruction', 'late'), ('corr_resp', 'left'), ('Instruction_stim', 'image/Chi_late.png'), ('early_position', [-0.4, 0]), ('late_position', [0.4, 0])]),
      OrderedDict([('No', 56), ('Category', 'Month'), ('earlier_stim', '五月'), ('later_stim', '二月'), ('distance', 3), ('congruency', 'incongruent'), ('orientation', 'Vert'), ('instruction', 'early'), ('corr_resp', 'down'), ('Instruction_stim', 'image/Chi_early.png'), ('early_position', [0, 0.4]), ('late_position', [0, -0.4])])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
    Routine BLOCK
  LoopTerminator block4
  Routine end
